PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = ryan's windows acer
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = tg_dr_set2
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Routines
  Routine instr1
    TextComponent instruction_text
      letterHeight = 0.05
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
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      text:
        Instructions

        On each trial you will see 12 shapes called tangrams. You will complete 6 trials.

        Your tangrams are in the correct order.

        Your partner's screen presents the same tangrams in an incorrect order.

        You must work together to help your partner match your correct tangram order.
    MouseComponent mouse
      clickable = text_2
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Click here to continue.
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  Routine instr2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Here is a video example.
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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
  Routine TIPI
    FormComponent tipi_form
      Data Format = rows
      Item Padding = 0.05
      Items = C:\Users\rjpil\OneDrive\GS\CECLAB\vgcmd_main\stimuli\tipi_format.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.03
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.4))
      Each Frame:
        continueButton.draw()

        if tipi_form.formComplete():
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
    ImageComponent tipi_scale
      image = C:\Users\rjpil\OneDrive\GS\CECLAB\vgcmd_main\stimuli\tipi_scale.png
      pos = (0, 0.43)
      size = (0.7, 0.1)
      startVal [time (s)] = 0.0
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
  Routine call_exp1
    TextComponent call_exp_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Call experimenter to continue!

        Please yell "We're done!"
    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine call_exp2
    TextComponent call_exp_text2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Call experimenter to continue!

        Please yell "We're done!"
    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TIPI_instr
    TextComponent TIPI_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On the following page you will describe your partner's personality.

        -You will see a number of statements about personality traits which may or may not apply to them.
        -Please click the number next to the statement to indicate the extent to which you agree or disagree with that statement.
        -You should rate the extent to which the wording applies to your partner, even if one characteristic applies more strongly than the other.

        1 is a rating of "Disagree Strongly"
        7 is a rating of "Agree Strongly"
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.6, -.42))
      Each Frame:
        continueButton.draw()
        continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
  Routine trial_answer
    ImageComponent one_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_9
      clickable = continue_text,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
      Begin Experiment:
        import pathlib

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        def win_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return continue_text


        def trial_timer():
            trial_time = visual.TextStim(win=win, name='trial_time',
            text=f"Completed in {int(t)} seconds!",
            font='Arial',
            pos=(0.4, 0), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return trial_time

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()

        # create function to call on each frame, that will out the
        # x and y position of an image as tuple
        # call this over each tangram



        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram01_4,gram02_4,gram03_4,gram04_4,gram05_4,gram06_4,gram07_4,gram08_4,gram09_4,gram10_4,gram11_4,gram12_4]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order

        continue_instr.autoDraw = True

        def win_checker()->bool:
            order = [hitbox_checker("one", gram08_4),
                            hitbox_checker("two", gram04_4),
                            hitbox_checker("three", gram07_4),
                            hitbox_checker("four", gram02_4),
                            hitbox_checker("five", gram01_4),
                            hitbox_checker("six", gram05_4),
                            hitbox_checker("seven", gram10_4),
                            hitbox_checker("eight", gram09_4),
                            hitbox_checker("nine", gram03_4),
                            hitbox_checker("ten", gram12_4),
                            hitbox_checker("eleven", gram06_4),
                            hitbox_checker("twelve", gram11_4)]
            if all(order):
                return True

        trial_time = []
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        win_state = False

        win_state = win_checker()


        # in begin routine, create a function that will check if
        # all the tangrams are in the correct spot
        # if they are, then have it return true and draw continue_text

        if win_state:
            continue_text = win_continue()
            continue_text.draw()
        else:
            win.flip()


        #if mouse.isPressedIn(polygon):
        #    crosses.append(makeCross(mouse.getPos()))
    ImageComponent gram01_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram01.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram02_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram02.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram03_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram03.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram04_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram04.png
      pos = (-0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram05_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram05.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram06_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram06.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram07_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram07.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram08_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram08.png
      pos = (-0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram09_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram09.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram10_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram10.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram11_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram11.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram12_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram12.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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  Routine trial_2_answer
    ImageComponent one_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_10
      clickable = continue_text,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Py
      Begin Experiment:
        import pathlib

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()

        # create function to call on each frame, that will out the
        # x and y position of an image as tuple
        # call this over each tangram



        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram01_5,gram02_5,gram03_5,gram04_5,gram05_5,gram06_5,gram07_5,gram08_5,gram09_5,gram10_5,gram11_5,gram12_5]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram10_5),
                            hitbox_checker("two", gram09_5),
                            hitbox_checker("three", gram07_5),
                            hitbox_checker("four", gram03_5),
                            hitbox_checker("five", gram12_5),
                            hitbox_checker("six", gram02_5),
                            hitbox_checker("seven", gram08_5),
                            hitbox_checker("eight", gram11_5),
                            hitbox_checker("nine", gram04_5),
                            hitbox_checker("ten", gram05_5),
                            hitbox_checker("eleven", gram06_5),
                            hitbox_checker("twelve", gram01_5)]
            if all(order):
                return True

        trial_time = []
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        win_state = False


        win_state = win_checker()


        # in begin routine, create a function that will check if
        # all the tangrams are in the correct spot
        # if they are, then have it return true and draw continue_text

        if win_state:
            continue_text = win_continue()
            continue_text.draw()
        else:
            win.flip()


        #if mouse.isPressedIn(polygon):
        #    crosses.append(makeCross(mouse.getPos()))
    ImageComponent gram01_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram01.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram02_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram02.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram03_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram03.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram04_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram04.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram05_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram05.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram06_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram06.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram07_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram07.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram08_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram08.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram09_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram09.png
      pos = (-0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram10_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram10.png
      pos = (-0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram11_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram11.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram12_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram12.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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  Routine trial_3_answer
    ImageComponent one_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_11
      clickable = continue_text,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_9
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Py
      Begin Experiment:
        import pathlib

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()


        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram01_6,gram02_6,gram03_6,gram04_6,gram05_6,gram06_6,gram07_6,gram08_6,gram09_6,gram10_6,gram11_6,gram12_6]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram02_6),
                            hitbox_checker("two", gram11_6),
                            hitbox_checker("three", gram01_6),
                            hitbox_checker("four", gram04_6),
                            hitbox_checker("five", gram08_6),
                            hitbox_checker("six", gram03_6),
                            hitbox_checker("seven", gram10_6),
                            hitbox_checker("eight", gram09_6),
                            hitbox_checker("nine", gram12_6),
                            hitbox_checker("ten", gram05_6),
                            hitbox_checker("eleven", gram07_6),
                            hitbox_checker("twelve", gram06_6)]
            if all(order):
                return True
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        win_state = False


        win_state = win_checker()


        # in begin routine, create a function that will check if
        # all the tangrams are in the correct spot
        # if they are, then have it return true and draw continue_text

        if win_state:
            continue_text = win_continue()
            continue_text.draw()
        else:
            win.flip()


        #if mouse.isPressedIn(polygon):
        #    crosses.append(makeCross(mouse.getPos()))
      End Routine:
        continue_instr.autoDraw = False
    ImageComponent gram01_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram01.png
      pos = (-0.2, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram02_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram02.png
      pos = (-0.7, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram03_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram03.png
      pos = (0.7, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram04_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram04.png
      pos = (0.2, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram05_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram05.png
      pos = (0.2, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram06_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram06.png
      pos = (0.7, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram07_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram07.png
      pos = (0.45, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram08_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram08.png
      pos = (0.45, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram09_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram09.png
      pos = (-0.45, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram10_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram10.png
      pos = (-0.7, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram11_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram11.png
      pos = (-0.45, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram12_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram12.png
      pos = (-0.2, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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  Routine trial_4_answer
    ImageComponent one_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_12
      clickable = continue_text,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Py
      Begin Experiment:
        import pathlib

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        def win_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return continue_text



        def continue_instr():
            continue_instr = visual.TextStim(win=win, name='continue_instr',
            text="Only Press Continue When Your Partner Is Ready",
            font='Arial',
            pos=(0.46, 0), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return continue_instr



        def trial_timer():
            trial_time = visual.TextStim(win=win, name='trial_time',
            text=f"Completed in {int(t)} seconds!",
            font='Arial',
            pos=(0.4, 0), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return trial_time

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()

        # create function to call on each frame, that will out the
        # x and y position of an image as tuple
        # call this over each tangram



        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram13,gram14,gram15,gram16,gram17,gram18,gram19,gram20,gram21,gram22,gram23,gram24]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order

        continue_instr = continue_instr()
        continue_instr.autoDraw = True

        def win_checker()->bool:
            order = [hitbox_checker("one", gram20),
                            hitbox_checker("two", gram16),
                            hitbox_checker("three", gram23),
                            hitbox_checker("four", gram14),
                            hitbox_checker("five", gram18),
                            hitbox_checker("six", gram24),
                            hitbox_checker("seven", gram19),
                            hitbox_checker("eight", gram22),
                            hitbox_checker("nine", gram13),
                            hitbox_checker("ten", gram17),
                            hitbox_checker("eleven", gram15),
                            hitbox_checker("twelve", gram21)]
            if all(order):
                return True

        trial_time = []
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        win_state = False

        win_state = win_checker()


        # in begin routine, create a function that will check if
        # all the tangrams are in the correct spot
        # if they are, then have it return true and draw continue_text

        if win_state:
            continue_text = win_continue()
            continue_text.draw()
        else:
            win.flip()


        #if mouse.isPressedIn(polygon):
        #    crosses.append(makeCross(mouse.getPos()))
    ImageComponent gram13
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram13.png
      pos = (-0.2, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram14
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram14.png
      pos = (0.2, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram15
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram15.png
      pos = (0.45, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram16
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram16.png
      pos = (-0.45, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram17
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram17.png
      pos = (0.2, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram18
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram18.png
      pos = (0.45, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram19
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram19.png
      pos = (-0.7, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram20
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram20.png
      pos = (-0.7, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram21
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram21.png
      pos = (0.7, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram22
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram22.png
      pos = (-0.45, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram23
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram23.png
      pos = (-0.2, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram24
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram24.png
      pos = (0.7, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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  Routine trial_5_answer
    ImageComponent one_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_13
      clickable = continue_text,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Py
      Begin Experiment:
        import pathlib

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        def win_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        def trial_timer():
            trial_time = visual.TextStim(win=win, name='trial_time',
            text=f"Completed in {int(t)} seconds!",
            font='Arial',
            pos=(0.4, 0), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return trial_time

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()

        # create function to call on each frame, that will out the
        # x and y position of an image as tuple
        # call this over each tangram



        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram13_7,gram14_7,gram15_7,gram16_7,gram17_7,gram18_7,gram19_7,gram20_7,gram21_7,gram22_7,gram23_7,gram24_7]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram21_7),
                            hitbox_checker("two", gram23_7),
                            hitbox_checker("three", gram17_7),
                            hitbox_checker("four", gram22_7),
                            hitbox_checker("five", gram19_7),
                            hitbox_checker("six", gram18_7),
                            hitbox_checker("seven", gram20_7),
                            hitbox_checker("eight", gram15_7),
                            hitbox_checker("nine", gram14_7),
                            hitbox_checker("ten", gram16_7),
                            hitbox_checker("eleven", gram13_7),
                            hitbox_checker("twelve", gram24_7)]
            if all(order):
                return True

        trial_time = []
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        win_state = False

        win_state = win_checker()


        if win_state:
            continue_text = win_continue()
            continue_text.draw()
        else:
            win.flip()
    ImageComponent gram13_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram13.png
      pos = (0.45, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram14_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram14.png
      pos = (-0.2, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram15_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram15.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram16_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram16.png
      pos = (0.2, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram17_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram17.png
      pos = (-0.2, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram18_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram18.png
      pos = (0.7, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram19_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram19.png
      pos = (0.45, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram20_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram20.png
      pos = (-0.7, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram21_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram21.png
      pos = (-0.7, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram22_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram22.png
      pos = (0.2, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram23_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram23.png
      pos = (-0.45, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram24_7
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram24.png
      pos = (0.7, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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  Routine trial_6_answer
    ImageComponent one_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_14
      clickable = continue_text,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Py
      Begin Experiment:
        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        def win_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        def trial_timer():
            trial_time = visual.TextStim(win=win, name='trial_time',
            text=f"Completed in {int(t)} seconds!",
            font='Arial',
            pos=(0.4, 0), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return trial_time

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()

        # create function to call on each frame, that will out the
        # x and y position of an image as tuple
        # call this over each tangram



        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram13_8,gram14_8,gram15_8,gram16_8,gram17_8,gram18_8,gram19_8,gram20_8,gram21_8,gram22_8,gram23_8,gram24_8]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order

        def win_checker()->bool:
            order = [hitbox_checker("one", gram17_8),
                            hitbox_checker("two", gram14_8),
                            hitbox_checker("three", gram20_8),
                            hitbox_checker("four", gram22_8),
                            hitbox_checker("five", gram24_8),
                            hitbox_checker("six", gram21_8),
                            hitbox_checker("seven", gram19_8),
                            hitbox_checker("eight", gram16_8),
                            hitbox_checker("nine", gram13_8),
                            hitbox_checker("ten", gram15_8),
                            hitbox_checker("eleven", gram23_8),
                            hitbox_checker("twelve", gram18_8)]
            if all(order):
                return True

        trial_time = []
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        win_state = False

        win_state = win_checker()

        if win_state:
            continue_text = win_continue()
            continue_text.draw()
        else:
            win.flip()
      End Routine:
        continue_instr.autoDraw = False
    ImageComponent gram13_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram13.png
      pos = (-0.2, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram14_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram14.png
      pos = (-0.45, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram15_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram15.png
      pos = (0.2, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram16_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram16.png
      pos = (-0.45, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram17_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram17.png
      pos = (-0.7, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram18_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram18.png
      pos = (0.7, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram19_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram19.png
      pos = (-0.7, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram20_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram20.png
      pos = (-0.2, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram21_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram21.png
      pos = (0.7, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram22_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram22.png
      pos = (0.2, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram23_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram23.png
      pos = (0.45, -0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram24_8
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram24.png
      pos = (0.45, 0.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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Flow
  Routine instr1
  Routine instr2
  Routine trial_4_answer
  Routine trial_5_answer
  Routine trial_6_answer
  Routine call_exp1
  Routine TIPI_instr
  Routine TIPI
  Routine trial_answer
  Routine trial_2_answer
  Routine trial_3_answer
  Routine call_exp2
