PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = ryan's windows acer
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = tg_main_set2
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Routines
  Routine instr1
    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions

        On each trial you will see 12 shapes called tangrams.

        The tangrams are in the incorrect order.

        Your partner's screen contains the correct order.

        You must work together to match your partners tangram order.
    MouseComponent mouse
      clickable = text_2
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Click here to continue.
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  Routine instr2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Here is a video example.
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent one
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = continue_text, easy_succ
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import pathlib

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        def win_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        def trial_timer():
            trial_time = visual.TextStim(win=win, name='trial_time',
            text=f"Completed in {int(t)} seconds!",
            font='Arial',
            pos=(0.4, 0), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return trial_time

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()

        # create function to call on each frame, that will out the
        # x and y position of an image as tuple
        # call this over each tangram



        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram01,gram02,gram03,gram04,gram05,gram06,gram07,gram08,gram09,gram10,gram11,gram12]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram08),
                            hitbox_checker("two", gram04),
                            hitbox_checker("three", gram07),
                            hitbox_checker("four", gram02),
                            hitbox_checker("five", gram01),
                            hitbox_checker("six", gram05),
                            hitbox_checker("seven", gram10),
                            hitbox_checker("eight", gram09),
                            hitbox_checker("nine", gram03),
                            hitbox_checker("ten", gram12),
                            hitbox_checker("eleven", gram06),
                            hitbox_checker("twelve", gram11)]
            order2 = [hitbox_checker("one", gram12),
                            hitbox_checker("two", gram02),
                            hitbox_checker("three", gram03),
                            hitbox_checker("four", gram04),
                            hitbox_checker("five", gram05),
                            hitbox_checker("six", gram06),
                            hitbox_checker("seven", gram07),
                            hitbox_checker("eight", gram08),
                            hitbox_checker("nine", gram09),
                            hitbox_checker("ten", gram10),
                            hitbox_checker("eleven", gram11),
                            hitbox_checker("twelve", gram01)]
            if all(order2):
                return True

        trial_time = []
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        gram01_xpos = gram01.pos[0]
        gram01_ypos = gram01.pos[1]

        win_state = False

        win_state = win_checker()


        # in begin routine, create a function that will check if
        # all the tangrams are in the correct spot
        # if they are, then have it return true and draw continue_text

        if win_state:
            continue_text = win_continue()
            continue_text.draw()
            trial_time.append(trial_timer())
            trial_time[0].draw()
        else:
            win.flip()


        #if mouse.isPressedIn(polygon):
        #    crosses.append(makeCross(mouse.getPos()))
    ImageComponent gram01
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram01.png
      pos = (-.70, -.3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram02
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram02.png
      pos = (-.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram03
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram03.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram04
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram04.png
      pos = (-0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram05
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram05.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram06
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram06.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram07
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram07.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram08
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram08.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram09
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram09.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram10
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram10.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram11
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram11.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram12
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram12.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent easy_succ
      letterHeight = 0.05
      pos = (-.30, 0)
      startVal [time (s)] = 0.0
      text = Move On
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  Routine trial_2
    ImageComponent one_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = continue_text, easy_succ_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import pathlib

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        def win_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()

        # create function to call on each frame, that will out the
        # x and y position of an image as tuple
        # call this over each tangram



        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram01_2,gram02_2,gram03_2,gram04_2,gram05_2,gram06_2,gram07_2,gram08_2,gram09_2,gram10_2,gram11_2,gram12_2]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram10_2),
                            hitbox_checker("two", gram09_2),
                            hitbox_checker("three", gram07_2),
                            hitbox_checker("four", gram03_2),
                            hitbox_checker("five", gram12_2),
                            hitbox_checker("six", gram02_2),
                            hitbox_checker("seven", gram08_2),
                            hitbox_checker("eight", gram11_2),
                            hitbox_checker("nine", gram04_2),
                            hitbox_checker("ten", gram05_2),
                            hitbox_checker("eleven", gram06_2),
                            hitbox_checker("twelve", gram01_2)]
            order2 = [hitbox_checker("one", gram01_2),
                            hitbox_checker("two", gram11_2),
                            hitbox_checker("three", gram03_2),
                            hitbox_checker("four", gram04_2),
                            hitbox_checker("five", gram05_2),
                            hitbox_checker("six", gram06_2),
                            hitbox_checker("seven", gram07_2),
                            hitbox_checker("eight", gram08_2),
                            hitbox_checker("nine", gram09_2),
                            hitbox_checker("ten", gram10_2),
                            hitbox_checker("eleven", gram02_2),
                            hitbox_checker("twelve", gram12_2)]
            if all(order2):
                return True

        trial_time = []
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        gram01_xpos = gram01.pos[0]
        gram01_ypos = gram01.pos[1]

        win_state = False


        win_state = win_checker()


        # in begin routine, create a function that will check if
        # all the tangrams are in the correct spot
        # if they are, then have it return true and draw continue_text

        if win_state:
            continue_text = win_continue()
            continue_text.draw()
            trial_time.append(trial_timer())
            trial_time[0].draw()
        else:
            win.flip()


        #if mouse.isPressedIn(polygon):
        #    crosses.append(makeCross(mouse.getPos()))
    ImageComponent gram01_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram01.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram02_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram02.png
      pos = (-0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram03_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram03.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram04_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram04.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram05_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram05.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram06_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram06.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram07_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram07.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram08_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram08.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram09_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram09.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram10_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram10.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram11_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram11.png
      pos = (-0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram12_2
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram12.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent easy_succ_2
      letterHeight = 0.05
      pos = (-.30, 0)
      startVal [time (s)] = 0.0
      text = Move On
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  Routine trial_3
    ImageComponent one_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = continue_text, easy_succ_3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        import pathlib

        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        print(f"the piece is {piece.name} and position is {piece.pos}")
                        return piece

        # create continue text to be presented when tangrams correctly arranged
        def win_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(0, 0), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        # failing because continue_text wasn't defined, but is listed as valid click
        # offscreen_continue() creates an unclickable, offscreen object named continue_text
        # continue_text is then updated and drawn when win_state = True
        def offscreen_continue():
            continue_text = visual.TextStim(win=win, name='continue_text',
            text="Continue",
            font='Arial',
            pos=(1.5, 1.5), height=0.001, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=0,
            languageStyle='LTR',
            depth=0.0)
            return continue_text

        continue_text = offscreen_continue()

        # create function to call on each frame, that will out the
        # x and y position of an image as tuple
        # call this over each tangram



        # then create a function that will test each tangra
        # and once they're all in the right place, at the same time
        # will return True

        def hitbox_checker(box: str, tangram)->bool:
            xpos = tangram.pos[0]
            ypos = tangram.pos[1]
            x_upbound = hitbox_dict[box][0][0]
            x_downbound = hitbox_dict[box][0][1]
            y_upbound = hitbox_dict[box][1][0]
            y_downbound = hitbox_dict[box][1][1]
            if x_upbound > xpos > x_downbound and y_upbound >  ypos > y_downbound:
                return True

        hitbox_dict = {('one'): ((-0.62, -0.7799999999999999), (0.38, 0.21999999999999997)),
         ('two'): ((-0.37, -0.53), (0.38, 0.21999999999999997)),
         ('three'): ((-0.12000000000000001, -0.28), (0.38, 0.21999999999999997)),
         ('four'): ((0.28, 0.12000000000000001), (0.38, 0.21999999999999997)),
         ('five'): ((0.53, 0.37), (0.38, 0.21999999999999997)),
         ('six'): ((0.7799999999999999, 0.62), (0.38, 0.21999999999999997)),
         ('seven'): ((-0.62, -0.7799999999999999), (-0.21999999999999997, -0.38)),
         ('eight'): ((-0.37, -0.53), (-0.21999999999999997, -0.38)),
         ('nine'): ((-0.12000000000000001, -0.28), (-0.21999999999999997, -0.38)),
         ('ten'): ((0.28, 0.12000000000000001), (-0.21999999999999997, -0.38)),
         ('eleven'): ((0.53, 0.37), (-0.21999999999999997, -0.38)),
         ('twelve'): ((0.7799999999999999, 0.62), (-0.21999999999999997, -0.38))}
      Begin Routine:
        pieces = [gram01_3,gram02_3,gram03_3,gram04_3,gram05_3,gram06_3,gram07_3,gram08_3,gram09_3,gram10_3,gram11_3,gram12_3]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram02_3),
                            hitbox_checker("two", gram11_3),
                            hitbox_checker("three", gram01_3),
                            hitbox_checker("four", gram04_3),
                            hitbox_checker("five", gram08_3),
                            hitbox_checker("six", gram03_3),
                            hitbox_checker("seven", gram10_3),
                            hitbox_checker("eight", gram09_3),
                            hitbox_checker("nine", gram12_3),
                            hitbox_checker("ten", gram05_3),
                            hitbox_checker("eleven", gram07_3),
                            hitbox_checker("twelve", gram06_3)]
            if all(order):
                return True
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        gram01_xpos = gram01.pos[0]
        gram01_ypos = gram01.pos[1]

        win_state = False

        '''
        if 0.778 > gram01_xpos > 0.62 and -0.219 > gram01_ypos > -0.38:
            win_state = True
        else:
            win_state = False
        '''

        win_state = win_checker()


        # in begin routine, create a function that will check if
        # all the tangrams are in the correct spot
        # if they are, then have it return true and draw continue_text

        if win_state:
            continue_text = win_continue()
            continue_text.setAutoDraw(True)
        else:
            win.flip()


        #if mouse.isPressedIn(polygon):
        #    crosses.append(makeCross(mouse.getPos()))
    ImageComponent gram01_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram01.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram02_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram02.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram03_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram03.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram04_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram04.png
      pos = (-0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram05_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram05.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram06_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram06.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram07_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram07.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram08_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram08.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram09_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram09.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram10_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram10.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram11_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram11.png
      pos = (-0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram12_3
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram12.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent easy_succ_3
      letterHeight = 0.05
      pos = (-.30, 0)
      startVal [time (s)] = 0.0
      text = Move On
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  Routine TIPI
    FormComponent tipi_form
      Data Format = rows
      Item Padding = 0.05
      Items = C:\Users\rjpil\OneDrive\GS\CECLAB\vgcmd_main\stimuli\tipi_format.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.03
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.4))
      Each Frame:
        continueButton.draw()

        if tipi_form.formComplete():
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
    ImageComponent tipi_scale
      image = C:\Users\rjpil\OneDrive\GS\CECLAB\vgcmd_main\stimuli\tipi_scale.png
      pos = (0, 0.43)
      size = (0.7, 0.1)
      startVal [time (s)] = 0.0
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  Routine trial_4
    ImageComponent one_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_6
      clickable = continue_text, easy_succ
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
      Begin Experiment:
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      Begin Routine:
        pieces = [gram13_4,gram14_4,gram15_4,gram16_4,gram17_4,gram18_4,gram19_4,gram20_4,gram21_4,gram22_4,gram23_4,gram24_4]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram20_4),
                            hitbox_checker("two", gram16_4),
                            hitbox_checker("three", gram23_4),
                            hitbox_checker("four", gram14_4),
                            hitbox_checker("five", gram18_4),
                            hitbox_checker("six", gram24_4),
                            hitbox_checker("seven", gram19_4),
                            hitbox_checker("eight", gram22_4),
                            hitbox_checker("nine", gram13_4),
                            hitbox_checker("ten", gram17_4),
                            hitbox_checker("eleven", gram15_4),
                            hitbox_checker("twelve", gram21_4)]
            order2 = [hitbox_checker("one", gram24_4),
                            hitbox_checker("two", gram14_4),
                            hitbox_checker("three", gram15_4),
                            hitbox_checker("four", gram16_4),
                            hitbox_checker("five", gram17_4),
                            hitbox_checker("six", gram18_4),
                            hitbox_checker("seven", gram19_4),
                            hitbox_checker("eight", gram20_4),
                            hitbox_checker("nine", gram21_4),
                            hitbox_checker("ten", gram22_4),
                            hitbox_checker("eleven", gram23_4),
                            hitbox_checker("twelve", gram13_4)]
            if all(order2):
                return True

        trial_time = []
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)

        gram01_xpos = gram01.pos[0]
        gram01_ypos = gram01.pos[1]

        win_state = False

        win_state = win_checker()


        # in begin routine, create a function that will check if
        # all the tangrams are in the correct spot
        # if they are, then have it return true and draw continue_text

        if win_state:
            continue_text = win_continue()
            continue_text.draw()
            trial_time.append(trial_timer())
            trial_time[0].draw()
        else:
            win.flip()


        #if mouse.isPressedIn(polygon):
        #    crosses.append(makeCross(mouse.getPos()))
    ImageComponent gram13_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram13.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram14_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram14.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram15_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram15.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram16_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram16.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram17_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram17.png
      pos = (-0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram18_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram18.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram19_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram19.png
      pos = (-0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram20_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram20.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram21_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram21.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram22_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram22.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram23_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram23.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram24_4
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram24.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent easy_succ_4
      letterHeight = 0.05
      pos = (-.30, 0)
      startVal [time (s)] = 0.0
      text = Move On
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  Routine trial_5
    ImageComponent one_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      clickable = continue_text, easy_succ
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      Begin Experiment:
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      Begin Routine:
        pieces = [gram13_5,gram14_5,gram15_5,gram16_5,gram17_5,gram18_5,gram19_5,gram20_5,gram21_5,gram22_5,gram23_5,gram24_5]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram21_6),
                            hitbox_checker("two", gram23_6),
                            hitbox_checker("three", gram17_6),
                            hitbox_checker("four", gram22_6),
                            hitbox_checker("five", gram19_6),
                            hitbox_checker("six", gram18_6),
                            hitbox_checker("seven", gram20_6),
                            hitbox_checker("eight", gram15_6),
                            hitbox_checker("nine", gram14_6),
                            hitbox_checker("ten", gram16_6),
                            hitbox_checker("eleven", gram13_6),
                            hitbox_checker("twelve", gram24_6)]
            order2 = [hitbox_checker("one", gram13_6),
                            hitbox_checker("two", gram23_6),
                            hitbox_checker("three", gram15_6),
                            hitbox_checker("four", gram16_6),
                            hitbox_checker("five", gram17_6),
                            hitbox_checker("six", gram18_6),
                            hitbox_checker("seven", gram19_6),
                            hitbox_checker("eight", gram20_6),
                            hitbox_checker("nine", gram21_6),
                            hitbox_checker("ten", gram22_6),
                            hitbox_checker("eleven", gram14_6),
                            hitbox_checker("twelve", gram24_6)]
            if all(order2):
                return True

        trial_time = []
      Each Frame:
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    ImageComponent gram13_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram13.png
      pos = (-0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram14_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram14.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram15_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram15.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram16_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram16.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram17_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram17.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram18_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram18.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram19_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram19.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram20_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram20.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram21_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram21.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram22_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram22.png
      pos = (-0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram23_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram23.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram24_5
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram24.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent easy_succ_5
      letterHeight = 0.05
      pos = (-.30, 0)
      startVal [time (s)] = 0.0
      text = Move On
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  Routine trial_6
    ImageComponent one_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/one.png
      pos = (-.70, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_8
      clickable = continue_text, easy_succ
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent two_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/two.png
      pos = (-.45, .30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent three_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/three.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent seven_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/seven.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eight_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eight.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent nine_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/nine.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent four_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/four.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent five_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/five.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent six_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/six.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent ten_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/ten.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent eleven_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/eleven.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent twelve_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/twelve.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      Begin Experiment:
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      Begin Routine:
        pieces = [gram13_6,gram14_6,gram15_6,gram16_6,gram17_6,gram18_6,gram19_6,gram20_6,gram21_6,gram22_6,gram23_6,gram24_6]
        picked = []
        movingPiece = None

            # this works, it keeps track of what trial it is
            # so in win_checker() add an if statement
                # if this_trial is specific trial
                # change what hitboxes takes in as its 2nd argument
                # depending on the winstate order


        def win_checker()->bool:
            order = [hitbox_checker("one", gram17_6),
                            hitbox_checker("two", gram14_6),
                            hitbox_checker("three", gram20_6),
                            hitbox_checker("four", gram22_6),
                            hitbox_checker("five", gram24_6),
                            hitbox_checker("six", gram21_6),
                            hitbox_checker("seven", gram19_6),
                            hitbox_checker("eight", gram16_6),
                            hitbox_checker("nine", gram13_6),
                            hitbox_checker("ten", gram16_6),
                            hitbox_checker("eleven", gram23_6),
                            hitbox_checker("twelve", gram18_6)]
            order2 = [hitbox_checker("one", gram13_6),
                            hitbox_checker("two", gram14_6),
                            hitbox_checker("three", gram22_6),
                            hitbox_checker("four", gram16_6),
                            hitbox_checker("five", gram17_6),
                            hitbox_checker("six", gram18_6),
                            hitbox_checker("seven", gram19_6),
                            hitbox_checker("eight", gram20_6),
                            hitbox_checker("nine", gram21_6),
                            hitbox_checker("ten", gram15_6),
                            hitbox_checker("eleven", gram23_6),
                            hitbox_checker("twelve", gram24_6)]
            if all(order2):
                return True

        trial_time = []
      Each Frame:
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    ImageComponent gram13_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram13.png
      pos = (-.70, .3)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram14_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram14.png
      pos = (-.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram15_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram15.png
      pos = (-0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram16_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram16.png
      pos = (0.20, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram17_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram17.png
      pos = (0.45, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram18_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram18.png
      pos = (0.70, 0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram19_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram19.png
      pos = (-0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram20_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram20.png
      pos = (-0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram21_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram21.png
      pos = (-0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram22_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram22.png
      pos = (0.20, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram23_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram23.png
      pos = (0.45, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    ImageComponent gram24_6
      image = /Users/rjpil/OneDrive/GS/CECLAB/vgcmd_main/stimuli/tangrams/gram24.png
      pos = (0.70, -0.30)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
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    TextComponent easy_succ_6
      letterHeight = 0.05
      pos = (-.30, 0)
      startVal [time (s)] = 0.0
      text = Move On
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  Routine call_exp1
    TextComponent call_exp_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Call experimenter to continue!

        Please yell "We're done!"
    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine call_exp2
    TextComponent call_exp_text2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Call experimenter to continue!

        Please yell "We're done!"
    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TIPI_instr
    TextComponent TIPI_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On the following page you will describe your partner's personality.

        -You will see a number of statements about personality traits which may or may not apply to them.
        -Please click the number next to the statement to indicate the extent to which you agree or disagree with that statement.
        -You should rate the extent to which the wording applies to your partner, even if one characteristic applies more strongly than the other.

        1 is a rating of "Disagree Strongly"
        7 is a rating of "Agree Strongly"
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.6, -.42))
      Each Frame:
        continueButton.draw()
        continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
Flow
  Routine instr1
  Routine instr2
  Routine trial_4
  Routine trial_5
  Routine trial_6
  Routine call_exp1
  Routine TIPI_instr
  Routine TIPI
  Routine trial
  Routine trial_2
  Routine trial_3
  Routine call_exp2
