PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = movingPics
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = $[1,0,0]
      pos = (-.4, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = $[0,0,1]
      pos = (.4, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        def movePicked(picked, mouse, grabbed):
            if grabbed is not None and mouse.isPressedIn(grabbed):
                grabbed.pos = mouse.getPos()
                return grabbed
            else:
                for piece in picked:
                    if mouse.isPressedIn(piece) and grabbed is None:
                        return piece
      Begin Routine:
        pieces = [polygon, polygon_2]
        picked = []
        movingPiece = None
      Each Frame:
        for piece in pieces:
            if mouse.isPressedIn(piece) and movingPiece is None:
                picked.append(piece)

        movingPiece = movePicked(picked, mouse, movingPiece)
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
